<?xml version="1.0" encoding="UTF-8"?>
<gadgetronStreamConfiguration xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd"
        xmlns="http://gadgetron.sf.net/gadgetron"
        xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">

<reader>
  <slot>1008</slot>
  <dll>gadgetron_mricore</dll>
  <classname>GadgetIsmrmrdAcquisitionMessageReader</classname>
</reader>

<writer>
  <slot>1022</slot>
  <dll>gadgetron_mricore</dll>
  <classname>MRIImageWriter</classname>
</writer>

<gadget>
  <name>RemoveROOversampling</name>
  <dll>gadgetron_mricore</dll>
  <classname>RemoveROOversamplingGadget</classname>
</gadget>

<gadget>
        <name>AccTrig</name>
        <dll>gadgetron_mricore</dll>
        <classname>AcquisitionAccumulateTriggerGadget</classname>
        <property><name>trigger_dimension</name><value></value></property>
        <property><name>sorting_dimension</name><value></value></property>
    </gadget>

    <gadget>
        <name>BucketToBuffer</name>
        <dll>gadgetron_mricore</dll>
        <classname>BucketToBufferGadget</classname>
        <property><name>N_dimension</name><value>contrast</value></property>
        <property><name>S_dimension</name><value>average</value></property>
        <property><name>split_slices</name><value>false</value></property>
        <property><name>ignore_segment</name><value>true</value></property>
        <property><name>verbose</name><value>true</value></property>
    </gadget>

<gadget>
  <name>FFTGadget</name>
  <dll>gadgetronpTxB0lib</dll>
  <classname>twoEchoFFTGadget</classname>
</gadget>

<gadget>
  <name>PhaseDiffRecon</name>
  <dll>gadgetronpTxB0lib</dll>
  <classname>PhaseDiffCombineGadget</classname>
</gadget>

<gadget>
  <name>B0Scaling</name>
  <dll>gadgetronpTxB0lib</dll>
  <classname>B0ScalingGadget</classname>
  <property><name>enableOutput</name><value>true</value></property>
  <property><name>folder</name><value>/tmp/pTxOutput</value></property>
  <property><name>file_prefix</name><value>pTxB0_</value></property>
</gadget>

<gadget>
        <name>FloatToShortAttrib</name>
        <dll>gadgetron_mricore</dll>
        <classname>FloatToUShortGadget</classname>

        <property><name>max_intensity</name><value>4096</value></property>
        <property><name>min_intensity</name><value>0</value></property>
        <property><name>intensity_offset</name><value>2048</value></property>
</gadget>

<gadget>
  <name>ImageFinish</name>
  <dll>gadgetron_mricore</dll>
  <classname>ImageFinishGadget</classname>
</gadget>

</gadgetronStreamConfiguration>
